<CompuCell3D Revision="20141124" Version="3.7.3">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="1"/>
      <Steps>2000</Steps>
      <Temperature>20.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Tumor"/>
   </Plugin>

   <Plugin Name="Volume">
      <!-- Handled within the python script -->
   </Plugin>

    s
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Tumor">10.0</Energy>
      <Energy Type1="Tumor" Type2="Tumor">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="40" y="40" z="0"/>
         <BoxMax x="160" y="160" z="1"/>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Tumor</Types>
      </Region>
   </Steppable>
</CompuCell3D>
