<CompuCell3D Revision="20141124" Version="3.7.3">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>15000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Regular"/>
   </Plugin>

   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="Regular">5.0</Energy>
      <Energy Type1="Regular" Type2="Regular">1.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>

   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Regular" LambdaVolume="2.0" TargetVolume="20"/>
   </Plugin>
   
   <Plugin Name="ExternalPotential">
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="80" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Regular</Types>
      </Region>
   </Steppable>
</CompuCell3D>
